<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="BIOMD0000000012" id="BIOMD0000000012">
  <units name="volume" id="units_volume">
    <unit prefix="femto" units="litre"/>
  </units>
  <units name="item" id="units_item"/>
  <units name="substance" id="units_substance">
    <unit units="item"/>
  </units>
  <units name="time" id="units_time">
    <unit multiplier="60" units="second"/>
  </units>
  <units name="substance_per_time" id="units_substance_per_time">
    <unit units="substance"/>
    <unit exponent="-1" units="time"/>
  </units>
  <component name="sbml">
    <variable name="time" units="dimensionless" id="time"/>
    <variable name="cell" units="dimensionless" initial_value="1" id="cell"/>
    <variable name="beta" units="dimensionless" id="beta"/>
    <variable name="alpha0" units="dimensionless" id="alpha0"/>
    <variable name="alpha" units="dimensionless" id="alpha"/>
    <variable name="eff" units="dimensionless" initial_value="20" id="eff"/>
    <variable name="n" units="dimensionless" initial_value="2" id="n"/>
    <variable name="KM" units="dimensionless" initial_value="40" id="KM"/>
    <variable name="tau_mRNA" units="dimensionless" initial_value="2" id="tau_mRNA"/>
    <variable name="tau_prot" units="dimensionless" initial_value="10" id="tau_prot"/>
    <variable name="t_ave" units="dimensionless" id="t_ave"/>
    <variable name="kd_mRNA" units="dimensionless" id="kd_mRNA"/>
    <variable name="kd_prot" units="dimensionless" id="kd_prot"/>
    <variable name="k_tl" units="dimensionless" id="k_tl"/>
    <variable name="a_tr" units="dimensionless" id="a_tr"/>
    <variable name="ps_a" units="dimensionless" initial_value="0.5" id="ps_a"/>
    <variable name="ps_0" units="dimensionless" initial_value="0.0005" id="ps_0"/>
    <variable name="a0_tr" units="dimensionless" id="a0_tr"/>
    <variable name="PX" units="dimensionless" initial_value="0" id="PX"/>
    <variable name="PY" units="dimensionless" initial_value="0" id="PY"/>
    <variable name="PZ" units="dimensionless" initial_value="0" id="PZ"/>
    <variable name="X" units="dimensionless" initial_value="0" id="X"/>
    <variable name="Y" units="dimensionless" initial_value="20" id="Y"/>
    <variable name="Z" units="dimensionless" initial_value="0" id="Z"/>
    <variable name="Reaction1" units="dimensionless" id="Reaction1"/>
    <variable name="Reaction2" units="dimensionless" id="Reaction2"/>
    <variable name="Reaction3" units="dimensionless" id="Reaction3"/>
    <variable name="Reaction4" units="dimensionless" id="Reaction4"/>
    <variable name="Reaction5" units="dimensionless" id="Reaction5"/>
    <variable name="Reaction6" units="dimensionless" id="Reaction6"/>
    <variable name="Reaction7" units="dimensionless" id="Reaction7"/>
    <variable name="Reaction8" units="dimensionless" id="Reaction8"/>
    <variable name="Reaction9" units="dimensionless" id="Reaction9"/>
    <variable name="Reaction10" units="dimensionless" id="Reaction10"/>
    <variable name="Reaction11" units="dimensionless" id="Reaction11"/>
    <variable name="Reaction12" units="dimensionless" id="Reaction12"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>t_ave</ci>
        <apply>
          <divide/>
          <ci>tau_mRNA</ci>
          <apply>
            <ln/>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta</ci>
        <apply>
          <divide/>
          <ci>tau_mRNA</ci>
          <ci>tau_prot</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>k_tl</ci>
        <apply>
          <divide/>
          <ci>eff</ci>
          <ci>t_ave</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>a_tr</ci>
        <apply>
          <times/>
          <apply>
            <minus/>
            <ci>ps_a</ci>
            <ci>ps_0</ci>
          </apply>
          <cn cellml:units="dimensionless">60</cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>a0_tr</ci>
        <apply>
          <times/>
          <ci>ps_0</ci>
          <cn cellml:units="dimensionless">60</cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>kd_prot</ci>
        <apply>
          <divide/>
          <apply>
            <ln/>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <ci>tau_prot</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>kd_mRNA</ci>
        <apply>
          <divide/>
          <apply>
            <ln/>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <ci>tau_mRNA</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>alpha</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>a_tr</ci>
            <ci>eff</ci>
            <ci>tau_prot</ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <ln/>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>KM</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>alpha0</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>a0_tr</ci>
            <ci>eff</ci>
            <ci>tau_prot</ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <ln/>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>KM</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>X</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>Reaction1</ci>
          </apply>
          <ci>Reaction10</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Y</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>Reaction2</ci>
          </apply>
          <ci>Reaction11</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Z</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <minus/>
            <ci>Reaction3</ci>
          </apply>
          <ci>Reaction12</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>PX</ci>
        </apply>
        <apply>
          <minus/>
          <ci>Reaction4</ci>
          <ci>Reaction7</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>PY</ci>
        </apply>
        <apply>
          <minus/>
          <ci>Reaction5</ci>
          <ci>Reaction8</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>PZ</ci>
        </apply>
        <apply>
          <minus/>
          <ci>Reaction6</ci>
          <ci>Reaction9</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction1</ci>
        <apply>
          <times/>
          <ci>kd_mRNA</ci>
          <ci>X</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction2</ci>
        <apply>
          <times/>
          <ci>kd_mRNA</ci>
          <ci>Y</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction3</ci>
        <apply>
          <times/>
          <ci>kd_mRNA</ci>
          <ci>Z</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction4</ci>
        <apply>
          <times/>
          <ci>k_tl</ci>
          <ci>X</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction5</ci>
        <apply>
          <times/>
          <ci>k_tl</ci>
          <ci>Y</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction6</ci>
        <apply>
          <times/>
          <ci>k_tl</ci>
          <ci>Z</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction7</ci>
        <apply>
          <times/>
          <ci>kd_prot</ci>
          <ci>PX</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction8</ci>
        <apply>
          <times/>
          <ci>kd_prot</ci>
          <ci>PY</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction9</ci>
        <apply>
          <times/>
          <ci>kd_prot</ci>
          <ci>PZ</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction10</ci>
        <apply>
          <plus/>
          <ci>a0_tr</ci>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>a_tr</ci>
              <apply>
                <power/>
                <ci>KM</ci>
                <ci>n</ci>
              </apply>
            </apply>
            <apply>
              <plus/>
              <apply>
                <power/>
                <ci>KM</ci>
                <ci>n</ci>
              </apply>
              <apply>
                <power/>
                <ci>PZ</ci>
                <ci>n</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction11</ci>
        <apply>
          <plus/>
          <ci>a0_tr</ci>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>a_tr</ci>
              <apply>
                <power/>
                <ci>KM</ci>
                <ci>n</ci>
              </apply>
            </apply>
            <apply>
              <plus/>
              <apply>
                <power/>
                <ci>KM</ci>
                <ci>n</ci>
              </apply>
              <apply>
                <power/>
                <ci>PX</ci>
                <ci>n</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Reaction12</ci>
        <apply>
          <plus/>
          <ci>a0_tr</ci>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>a_tr</ci>
              <apply>
                <power/>
                <ci>KM</ci>
                <ci>n</ci>
              </apply>
            </apply>
            <apply>
              <plus/>
              <apply>
                <power/>
                <ci>KM</ci>
                <ci>n</ci>
              </apply>
              <apply>
                <power/>
                <ci>PY</ci>
                <ci>n</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
</model>
